PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Dual_para
  keyboardBackend = ioHub
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Routines
  Routine Welcome_screen_
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    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Bienvenido 
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  Routine Instruccions
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    TextComponent Instrucccions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        A continuación presione la barra espaciadora o haga clic en el botón "Iniciar" para comenzar el experimento.
  Routine Circle
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event

        # Crear una ventana
        win = visual.Window(size=(800, 600), color='white')

        # Crear un círculo
        my_circle = visual.Circle(win, radius=0.2, fillColor='red')

        # Dibujar el círculo en la ventana
        my_circle.draw()

        # Actualizar la ventana
        win.flip()

        # Esperar hasta que se presione una tecla para cerrar la ventana
        event.waitKeys()

        # Cerrar la ventana
        win.close()
  Routine Blank
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    TextComponent Blank_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Instruction_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Sigue el circulo con el mouse 
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  Routine End
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    TextComponent Terminado
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End
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Flow
  Routine Welcome_screen_
  Routine Instruccions
  Routine Blank
  Routine Instruction_2
  Routine Circle
  Routine End
